PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = tutorial6
  keyboardBackend = ioHub
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Routines
  Routine trial
    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      text [set every repeat] = $"GBP " + str(reward_today) + " today" + " or" + " GBP" + str(future_reward) + " after " + str(delay) + " days"
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    KeyboardComponent key_resp
      allowedKeys = 't','l'
      forceEndRoutine = True
      startVal [time (s)] = 1
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditionsfiletutorial6final.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('reward_today', 11), ('future_reward', 30), ('delay', 7)]),
      OrderedDict([('reward_today', 15), ('future_reward', 35), ('delay', 13)]),
      OrderedDict([('reward_today', 27), ('future_reward', 50), ('delay', 21)]),
      OrderedDict([('reward_today', 40), ('future_reward', 55), ('delay', 62)]),
      OrderedDict([('reward_today', 49), ('future_reward', 60), ('delay', 89)]),
      OrderedDict([('reward_today', 67), ('future_reward', 75), ('delay', 119)]),
      OrderedDict([('reward_today', 78), ('future_reward', 80), ('delay', 162)]),
      OrderedDict([('reward_today', 49), ('future_reward', 50), ('delay', 30)]),
      OrderedDict([('reward_today', 84), ('future_reward', 99), ('delay', 49)]),
      OrderedDict([('reward_today', 72), ('future_reward', 83), ('delay', 7)]),
      OrderedDict([('reward_today', 30), ('future_reward', 47), ('delay', 19)]),
      OrderedDict([('reward_today', 81), ('future_reward', 99), ('delay', 4)]),
      OrderedDict([('reward_today', 94), ('future_reward', 103), ('delay', 75)]),
      OrderedDict([('reward_today', 62), ('future_reward', 89), ('delay', 9)]),
      OrderedDict([('reward_today', 95), ('future_reward', 150), ('delay', 19)]),
      OrderedDict([('reward_today', 72), ('future_reward', 93), ('delay', 20)]),
      OrderedDict([('reward_today', 30), ('future_reward', 60), ('delay', 8)]),
      OrderedDict([('reward_today', 49), ('future_reward', 80), ('delay', 27)]),
      OrderedDict([('reward_today', 42), ('future_reward', 59), ('delay', 23)]),
      OrderedDict([('reward_today', 19), ('future_reward', 68), ('delay', 4)])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
    Routine trial
  LoopTerminator trials
